/* Frankenhaeuser-Huxley model of the cochlear nerve.

Authors: Lauren Heckelman, Matthew McCann, and Michelle Mueller.

This code relies on the FH mechanism written by Michael Hines, which describes the FH equation given in the original Frankenhaeuser-Huxley paper. Also referenced is the extracellular_sample.hoc code distributed by Leo Medina. Spiral ganglion cell membrane parameters taken from Frijns, et al. (1995), and Cartee (2006).

The original code by Hines replicates Figures 1, 3, and 6 in the original Frankenhaeuser-Huxley paper. To validate for yourself, compile the fh.mod function and run fh.hoc.

References:

[1] Frankenhaeuser, B. and Huxley, A. F. (1964)
The action potential in the myelinated nerve fibre of Xenoupus Laevis as computed
on the basis of voltage clamp data.
J. Physiol. 171: 302-315

[2] Hines, Michael. Xenopus Myelinated Neuron (Frankenhaeuser, Huxley 1964). From http://senselab.med.yale.edu/ModelDB/showModel.cshtml?model=3507

[3] Frijns, J.H.M, de Snoo, S.L., and Schoonhoven, R. (1995) Potential distributions and neural excitation patterns in a rotationally symmetric model of the electrically stimulated cochlea. Hearing Research 87: 170-186

[4] Cartee, Lianne, A. (2006). Spiral ganglion cell site of excitation II: Numerical model analysis. ￼￼Hearing Research 215: 22–30

*/

/* Note the following parameter units used by the fh.mod function:
	v (mV)
	celsius (degC)
	pnabar (cm/s)
	ppbar (cm/s)
	pkbar (cm/s)
	nai (mM)
	nao (mM)
	ki (mM)
	ko (mM)
	gl (S/cm2)
	el (mV)
*/

// ----------------------- Global Variables --------------------------------- //

rhoa = 110           // axial resistivity [ohm-cm]
v_init = -65         // initial potential [mV]
PNa = 172            // Sodium Permeability [um^3 / s]
Pk = 6.68            // Potassium Permeability [um^3 / s]
Gl = 2.43            // Leak Conductance [nS]

// Dendrite ------------------------------------------------------------------
D_den = 1             // fiber diameter in um
N_NODES_den = 5       // number of nodes
INL_dend = 175        // internodal length in um

// Soma ----------------------------------------------------------------------
D_soma = 10           // fiber diameter in um
N_NODES_soma = 1      // number of nodes
INL_soma = 50         // internodal length in um

// Axon ----------------------------------------------------------------------
D_axon = 2            // fiber diameter in um
N_NODES_axon = 21     // number of nodes
INL_axon = 100*D_axon // internodal length in um

// Stimulus ------------------------------------------------------------------
PW = 0.1              // pulse width in ms
DELAY = 1             // in ms
E2F_DIST = 0.5        // electrode to fiber distance in mm
AMPLITUDE = -10     // cathodic, check units!
tstop = 10            // in ms
dt = 0.001

// Extracellular Medium
sigma_e = 1/700       // [S/mm]

// ----------------------- Creating Axon ------------------------------------ //
create axon[N_NODES_axon]
// initializing axon
proc initialize(){
  for i=0, N_NODES_axon-1 {
		axon[i]{
			nseg = 1
			diam = 0.7*D_axon  // node diameter (um)
			L    = 1		   // node length (um)
			Ra   = rhoa*( (L + INL_axon) / L )  // trick to account for internodal resistance
			cm   = 2					   // specific membrane capacitance (uF/cm^2)
      insert fh
          nai=10  nao=142  ki=141 ko=4.2  // [mM]
          areafac = PI*L*diam/100		  // mamps/cm^2 to namps (units of 1e-6 cm^2)
          xarea = 3.14 * diam * diam/4    // [um^2]
          sarea = 3.14 * diam * L         // [um^2]
          pnabar =  PNa / sarea / 1e-4    // [cm/s]
          pkbar = Pk / sarea / 1e-4      // [cm/s]
          {celsius=37}                    // Typical human body temperature
          g_l = Gl * 1e9 / sarea          // [S/cm^2]
	  insert extracellular   // for extracellular stimulation
		}
	}

  for i=0, N_NODES_axon-2 {
		connect axon[i](1), axon[i+1](0)
  }
	finitialize(v_init)
}
initialize()

// ----------------------- Creating Soma ------------------------------------ //
create soma[N_NODES_soma]
// initializing soma
proc initialize(){
    soma{
        nseg = 1
        diam = 0.7*D_soma  // node diameter (um)
        L    = 1		  // node length (um)
        Ra   = rhoa*( (L + INL_soma) / L )  // trick to account for internodal resistance
        cm   = 2					       // specific membrane capacitance (uF/cm^2)
        insert fh
            nai=10  nao=142  ki=141 ko=4.2  // [mM]
            areafac = PI*L*diam/100		    // mamps/cm^2 to namps (units of 1e-6 cm^2)
            xarea = 3.14 * diam * diam/4    // cross sectional area [um^2]
            sarea = 3.14 * diam * L         // surface area of node [um^2]
            pnabar =  PNa / sarea / 1e-4    // [cm/s]
            pkbar = Pk / sarea / 1e-4      // [cm/s]
            {celsius=37}                    // Typical human body temperature
            g_l = Gl * 1e9 / sarea          // [S/cm^2]
        insert extracellular   // for extracellular stimulation
    }
	finitialize(v_init)
}
initialize()

// ----------------------- Creating Dendrite -------------------------------- //
create dend[N_NODES_den]
// initializing dendrite
proc initialize(){
  for i=0, N_NODES_den-1 {
		dend[i]{
			nseg = 1
			diam = 0.7*D_den     // node diameter (um)
			L    = 1		 // node length (um)
			Ra   = rhoa*( (L + INL_dend) / L )  // trick to account for internodal resistance
			cm   = 2					        // specific membrane capacitance (uF/cm^2)
      insert fh
            nai=10  nao=142  ki=141 ko=4.2   // [mM]
            areafac = PI*L*diam/100		     // mamps/cm^2 to namps (units of 1e-6 cm^2)
            xarea = 3.14 * diam * diam/4     // [um^2]
            sarea = 3.14 * diam * L          // [um^2]
            pnabar =  PNa / sarea / 1e-4     // [cm/s]
            pkbar = Pk / sarea / 1e-4       // [cm/s]
            {celsius=37}                     // Typical human body temperature
            g_l = Gl * 1e9 / sarea           // [S/cm^2]
	  insert extracellular   // for extracellular stimulation
		}
	}

  for i=0, N_NODES_den-2 {
		connect dend[i](1), dend[i+1](0)
  }
	finitialize(v_init)
}
initialize()

// ----------------------- Connect all parts and view ----------------------- //
connect dend[N_NODES_den-1](1), soma[0](0)
connect soma[0](1), axon[0](0)
// HOW DO WE RENAME THIS TO HANDLE AS A SINGLE UNIT???

/* See topology in command window [MAKE SURE TO STUDY THIS. AXON NODE 0-20, SOMA
NODE 21, DENDRITE NODE 22-26 */
topology()

// Visualize neuron (it looks dumb)
//objref s
//s = new Shape()

// ----------------------- Extracellular Stimulation ------------------------ //
tot_NODES = N_NODES_den + N_NODES_soma + N_NODES_axon   // total nodes in neuron

// This section evaluates the length of the neuron referenced at the beginning of the axon (that is, axon[0](0) has length 0 mm.)
objref x_neuron
x_neuron = new Vector(tot_NODES,0)
for i=0, tot_NODES-1{
    if(i <= N_NODES_axon - 1){
		x_neuron.x[i] = INL_axon*i
    }
    if(i == N_NODES_axon + N_NODES_soma - 1){
    	x_neuron.x[i] = x_neuron.x[i-1] + INL_soma
    }
    if(i >= N_NODES_axon + N_NODES_soma){
    	x_neuron.x[i] = x_neuron.x[i-1] + INL_dend
    }
}
x_neuron.mul(1e-3) //convert from um to mm

// Create vector to hold extracellular potential values
objref phi_e
phi_e = new Vector(tot_NODES,0)

// Vectors to hold recorded membrane potentials
objref  soma_mem[N_NODES_soma], axon_mem[N_NODES_axon], dend_mem[N_NODES_den]    // objects to store voltage in soma and axon

for i = 0, N_NODES_soma-1{
    soma_mem[i] = new Vector(tstop/dt,0)    // voltage in the soma
    soma_mem[i].record(&soma[i].v(0.5))   // record soma voltage in middle of soma
}

for i = 0, N_NODES_axon-1{
    axon_mem[i] = new Vector(tstop/dt,0)    // voltage in the axon
    axon_mem[i].record(&axon[i].v(0.5))   // record soma voltage in middle of axon
}

for i = 0, N_NODES_den-1{
    dend_mem[i] = new Vector(tstop/dt,0)    // voltage in the dendrite
    dend_mem[i].record(&dend[i].v(0.5))   // record soma voltage in middle of dendrite
}


//dummy stimulus only to control waveform parameters
//The 'dummy' section has nothing to do with the fiber
objref dummystim
create dummy
dummy dummystim = new IClamp(0.5)	// 0.5 is the normalized location
dummystim.del = 0
dummystim.dur = 0.1
dummystim.amp = -10                  // Cathodic stimulation is negative!

//------------------------------------------------------------------------------
// This section creates a new vector that rereferences the length centered at the node of stimulation.
objref stim_pos
pos = x_neuron.x[24]        // This is the node you want to center the electrode over. In this      situation, we are referencing node 24, or the middle of the dendrite.
stim_pos = x_neuron.c.sub(pos)

// extracellular potentials
proc potential_field(){
	for i=0, tot_NODES-1{
		r = sqrt(stim_pos.x[i]^2+E2F_DIST^2) //in mm. Note that we are assuming that the electrode is at position (0,0,E2F_DIST) i.e. over the middle node
		phi_e.x[i] = dummystim.i/(4*sigma_e*PI*r) // check units!!!!
        if(i <= N_NODES_axon - 1){
		    axon[i].e_extracellular(0.5) = phi_e.x[i]
        }
        if(i == N_NODES_axon + N_NODES_soma - 1){
    	    soma[0].e_extracellular(0.5) = phi_e.x[i]
        }
        if(i >= N_NODES_axon + N_NODES_soma){
    	    dend[i - (N_NODES_axon + N_NODES_soma)].e_extracellular(0.5) = phi_e.x[i]
        }
    }
}

// time integrate with constant time step size
proc stimulate(){
	finitialize(v_init)
	while (t<tstop) {
		potential_field()
	  fadvance()
	}
}

// ----------------------- Debugging -----------------------------------------
stimulate()
objref g, rp
g = new Graph()
g.size(0,tstop,v_init-10,40)
dend_mem[2].plot(g,dt)
axon_mem[10].plot(g,dt,2,1)
